CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop images you want to analyse. Each image should have at least 2 corresponding tif files - DAPI and GFP/RFP/any other staining. This pipeline suggests you have DAPI, RFP and GFP tif files for every image (Volocity can export it in this form). Make sure your DAPI filename has “C01” in it, RFP filename has “C02” in it, GFP has “C03” (you can change this name requirements in NamesAndTypes tab if you want to)']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI (1)")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "887")
    Name to assign these images:_887
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Opening:[module_num:5|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
    Select the input image:DAPI
    Name the output image:Opening
    Structuring element:disk,2

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the DAPI image. Increase typical diameter of objects proportionally to your magnification (5-20 is set for 10x).']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
    Select the input image:Opening
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:25
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the output objects:Cells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
MeasureObjectSizeShape:[module_num:8|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

ImageMath:[module_num:9|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:trueDAPI
    Image or measurement?:Image
    Select the first image:DAPI
    Multiply the first image by:255
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    Image or measurement?:Image
    Select the second image:DAPI
    Multiply the second image by:0
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
ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:trueGFP
    Image or measurement?:Image
    Select the first image:GFP
    Multiply the first image by:255
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    Image or measurement?:Image
    Select the second image:DAPI
    Multiply the second image by:0
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
ImageMath:[module_num:11|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:trueRFP
    Image or measurement?:Image
    Select the first image:RFP
    Multiply the first image by:255
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    Image or measurement?:Image
    Select the second image:DAPI
    Multiply the second image by:0
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
ImageMath:[module_num:12|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:true887
    Image or measurement?:Image
    Select the first image:_887
    Multiply the first image by:255
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    Image or measurement?:Image
    Select the second image:DAPI
    Multiply the second image by:0
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
MeasureObjectIntensity:[module_num:13|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notes:['Measure intensity features from nuclei and cell objects against the DAPI image.']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
    Hidden:4
    Select an image to measure:trueDAPI
    Select an image to measure:trueGFP
    Select an image to measure:trueRFP
    Select an image to measure:true887
    Select objects to measure:Cells

ExportToSpreadsheet:[module_num:14|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Intensity_MeanIntensity_true887,Cells|Intensity_MeanIntensity_trueDAPI,Cells|Intensity_MeanIntensity_trueGFP,Cells|Intensity_MeanIntensity_trueRFP,Cells|Location_Center_Y,Cells|Location_Center_X,Cells|AreaShape_Perimeter,Cells|AreaShape_Area,Cells|AreaShape_MeanRadius,Cells|AreaShape_Eccentricity,Image|Count_Cells,Image|Group_Index,Image|Group_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
